PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = norm
  Window size (pixels) = [2560, 1440]
  expName = imensa_vc
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine Consent2
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    CodeComponent code_consent
      Code Type = Auto->JS
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      End Routine:
        if key_consent2.keys == 'space':
             consentLoop.finished = True
    ImageComponent consent_2
      image = consent2.png
      saveStartStop = False
      size = (1.7,1.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_consent2
      allowedKeys = 'space','b'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine Intro
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    CodeComponent code_intro
      Code Type = Py
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      Begin Experiment:
        import random
        # Shuffle the seed (optional but adds more randomness)
        random.seed(random.randint(0, 10000))

        # List of emotions
        emotion_texts = [
            "How strongly are you feeling joyful right now?",
            "How strongly are you feeling warm and tender right now?",
            "How strongly are you feeling inspired or uplifted right now?",
            "How strongly are you feeling sadness right now?",
            "How strongly are you feeling ashamed right now?",
            "How strongly are you feeling horrified right now?",
            "How strongly are you feeling disgusted right now?",
            "How strongly are you feeling a sense of relevance to yourself right now?",
            "How strongly are you feeling surprised right now?",
            "How strongly are you feeling angry right now?",
            "How strongly are you feeling happy right now?"
        ]

        # Generate a random number (0~10, to match the list index)
        emo_index = random.randint(0, len(emotion_texts) - 1)

        # Assign the selected emotion text to a variable
        cont_emotion_que = emotion_texts[emo_index]
      End Routine:
        thisExp.addData('continuous_emotion_type',emo_index)
    TextComponent text_intro
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.3
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      text:
        In this task, you will watch nine short videos, each lasting 2–3 minutes. While watching, you will provide continuous ratings related to the video and answer a series of follow-up questions after each clip.

        During the video, you will rate the extent of your feelings by moving the red rating circle along the continuous rating bar using your mouse. The position of the circle represents the intensity of your emotions and will be recorded continuously. Please adjust the circle’s position whenever you notice a change in your emotions throughout the video.

        A demonstration of the continuous rating will be provided on the next page. Please adjust volume, if needed.

        To proceed to the next page, please press the spacebar.
    KeyboardComponent key_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine demo
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    CodeComponent code_demo
      Code Type = Py
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      Begin Experiment:
        slider_decimals = 1
        slideSpeed = 12
        oldRating = 50
        slider_width = 1
        slider_height = .05
        slider_orientation = 0
        #Failing to set ticks or labels in code
        slider_granularity = .1

        ###############
        # there seems to be a sampling mismatch between the audio playing device and the audio
        # the sound is sampling weird
        # but wait to see whether the online study went well
        ###############

        demo_text = (
            f'{cont_emotion_que}\n'
            f'Adjust the red circle to reflect your emotion in real-time.'
        )
      Begin Routine:
        # frame counter
        thisFrame = 0

        # create an empty list to store data
        slider_data=[]

        # record the current position of the mouse
        mouseRec=mouse_demo.getPos()

        # a boolean value to make sure we only store one time point of the audio to stopping
        audioStopped = False

        # a boolean value to indicate whether there has been valid slider data
        mouseInSlider = False
      Each Frame:
        if slider_shape_demo.contains(mouse_demo) and (not mouseInSlider):
            mouseInSlider = True

        if slider_shape_demo.contains(mouse_demo) and mouseInSlider:
            if mouse_demo.getPos()[slider_orientation] != mouseRec[slider_orientation]:
                mouseRec = mouse_demo.getPos()
                continuousSlider_demo.markerPos = mouseRec[slider_orientation]/slider_width*100+100/2
                # update oldRatings if
            if continuousSlider_demo.markerPos:
                if oldRating != continuousSlider_demo.markerPos:
                    oldRating = continuousSlider_demo.markerPos
            if continuousSlider_demo.markerPos and thisFrame%slideSpeed==0:
                slider_data.append([round(oldRating,slider_decimals),int(t*1000)])

        thisFrame = thisFrame + 1
      End Routine:
        thisExp.addData('continuousrating_demo',slider_data)
    MouseComponent mouse_demo
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent slider_shape_demo
      fillColor = white
      opacity = 0
      pos = (0, -0.67)
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.15)
      startVal [time (s)] = 0.0
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    SliderComponent continuousSlider_demo
      color = 1, 1, 1
      fillColor = 0.6078, -0.2784, -0.2784
      forceEndRoutine = False
      granularity = 0
      labels = "Barely at all", "", "Strongest\nimaginable"
      letterHeight = 0.06
      pos = (0, -0.67)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0, 50, 100)
      units = norm
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    TextComponent questionText_demo
      letterHeight = 0.08
      pos = (0, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $demo_text
      wrapWidth = 1.4
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    MovieComponent movie_demo
      backend = ffpyplayer
      forceEndRoutine = True
      movie = stimuli/testvideo_4s.mp4
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = 0.0
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  Routine confirm
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    CodeComponent code_confirm
      Code Type = Py
      End Routine:
        if key_demo.keys == 'space':
             demoLoop.finished = True
    TextComponent demo_confirm
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        If you’d like to practice rating again, press “b.”

        If the instructions are clear and you’re ready to begin the task, press the spacebar to proceed.
    KeyboardComponent key_demo
      allowedKeys = 'space','b'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine begintrial
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    CodeComponent code_begintrial
      Code Type = Py
      Begin Routine:
        trial_start_text = (
            f"Movie clip {TrialN} of 9 is about to start.\n\n"
            f"During the movie, you will answer the\nquestion with the continuous rating:\n"
            f'"{cont_emotion_que}"\n\n'
            f"If you need a break before the next video,\nplease take a moment now.\n"
            f"Pay close attention to the video and the \ncontinuous rating as the movie plays.\n\n"
            f"When you're ready, press the spacebar to begin."
        )
    TextComponent text_begintrial
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $trial_start_text
      wrapWidth = 1.3
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine clip
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    CodeComponent code_clip
      Code Type = Py
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      Begin Routine:
        # frame counter
        thisFrame = 0

        # create an empty list to store data
        slider_data=[]

        # record the current position of the mouse
        mouseRec=mouse_clip.getPos()

        # a boolean value to make sure we only store one time point of the audio to stopping
        audioStopped = False

        # a boolean value to indicate whether there has been valid slider data
        mouseInSlider = False
      Each Frame:
        if slider_shape_clip.contains(mouse_clip) and (not mouseInSlider):
            mouseInSlider = True

        if slider_shape_clip.contains(mouse_clip) and mouseInSlider:
            if mouse_clip.getPos()[slider_orientation] != mouseRec[slider_orientation]:
                mouseRec = mouse_clip.getPos()
                continuousSlider_clip.markerPos = mouseRec[slider_orientation]/slider_width*100+100/2
                # update oldRatings if
            if continuousSlider_clip.markerPos:
                if oldRating != continuousSlider_clip.markerPos:
                    oldRating = continuousSlider_clip.markerPos
            if continuousSlider_clip.markerPos and thisFrame%slideSpeed==0:
                slider_data.append([round(oldRating,slider_decimals),int(t*1000)])

        thisFrame = thisFrame + 1
      End Routine:
        thisExp.addData('continuousrating',slider_data)
    MouseComponent mouse_clip
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent slider_shape_clip
      fillColor = white
      opacity = 0
      pos = (0, -0.67)
      saveStartStop = False
      shape = rectangle
      size = (1.5, 0.15)
      startVal [time (s)] = 0.0
      units = norm
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    SliderComponent continuousSlider_clip
      color = (1,1,1)
      fillColor = 0.6078, -0.2784, -0.2784
      forceEndRoutine = False
      granularity = 0
      labels = "Barely at all", "", "Strongest\nimaginable"
      letterHeight = 0.06
      pos = (0, -0.67)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0, 50, 100)
      units = norm
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    TextComponent questionText_clip
      letterHeight = 0.1
      pos = (0, 0.7)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $cont_emotion_que
      wrapWidth = 1.4
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    MovieComponent movie_clip
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $clip_stim
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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  Routine ratings
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    CodeComponent code_ratings
      Code Type = Py
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    TextComponent text_rating_intro
      letterHeight = 0.09
      pos = (0, .6)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please respond to the following questions about the previous video clip by selecting a point on the bar.
      wrapWidth = 1.4
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    MouseComponent mouse_ratings
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent text_emo_ratings
      letterHeight = 0.08
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = .5
      text [set every repeat] = $rating_ques
      wrapWidth = 1.2
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    SliderComponent continuousSlider_ratings
      color = 1.0000, 1.0000, 1.0000
      fillColor = 0.6078, -0.2784, -0.2784
      forceEndRoutine = True
      granularity = 0
      labels = "Barely at all", "", "Strongest\nimaginable"
      letterHeight = 0.06
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = .5
      styles = rating
      ticks = (0,50,100)
      units = norm
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  Routine quiz
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    CodeComponent code_quiz
      Code Type = Py
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      Begin Routine:
        button = 0
        text_quiz.alignText = 'left'
      End Routine:
        if button == que_answer:
           rightorwrong = True
        else:
           rightorwrong = False
        thisExp.addData('quiz_response',button)
        thisExp.addData('quiz_pass',rightorwrong)
    MouseComponent mouse_quiz
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent text_quiz
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $compre_ques
      wrapWidth = 1.4
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    ButtonComponent button_A_quiz
      bold = True
      callback = button = 1
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.4, -0.6)
      save = none
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = A
      timeRelativeTo = routine
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    ButtonComponent button_B_quiz
      bold = True
      callback = button = 2
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.2, -0.6)
      save = none
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = B
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    ButtonComponent button_C_quiz
      bold = True
      callback = button = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.6)
      save = none
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = C
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    ButtonComponent button_D_quiz
      bold = True
      callback = button = 4
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.2, -0.6)
      save = none
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = D
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    ButtonComponent button_E_quiz
      bold = True
      callback = button = 5
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.6)
      save = none
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = E
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  Routine End
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    TextComponent text_ending
      letterHeight = 0.07
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        The experiment is now complete.
        Thank you for your participation.
        This window will close shortly.
  Routine Consent1
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    ImageComponent consent_1
      image = consent1.png
      saveStartStop = False
      size = (1.7,1.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_consent1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine attention
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    CodeComponent code_atten
      Code Type = Py
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      Begin Routine:
        button_atten = 0
        text_atten.alignText = 'left'
      End Routine:
        if button_atten == atten_answer:
           rightorwrong = True
        else:
           rightorwrong = False
        thisExp.addData('atten_button_response',button_atten)
        thisExp.addData('atten_pass',rightorwrong)
    MouseComponent mouse_atten
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text_atten
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $attention_ques
      wrapWidth = 1.4
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    ButtonComponent button_A_atten
      bold = True
      callback = button_atten = 1
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.4, -0.6)
      save = none
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = A
      timeRelativeTo = routine
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    ButtonComponent button_B_atten
      bold = True
      callback = button_atten = 2
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.2, -0.6)
      save = none
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = B
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    ButtonComponent button_C_atten
      bold = True
      callback = button_atten = 3
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.6)
      save = none
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = C
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    ButtonComponent button_D_atten
      bold = True
      callback = button_atten = 4
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.2, -0.6)
      save = none
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = D
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    ButtonComponent button_E_atten
      bold = True
      callback = button_atten = 5
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.4, -0.6)
      save = none
      saveStartStop = False
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      text = E
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  Routine real
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    MouseComponent mouse_real
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    TextComponent text_real
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text [set every repeat]:
        This question will not affect your payment.
        We simply ask for your honest response.

        Did you pay sufficient attention during the study, and do you believe that your data should be included in the final dataset?

        Click anywhere on the bar to submit your response.
    SliderComponent real_answer
      color = White
      forceEndRoutine = True
      granularity = 0
      labels = "Strongly\ndisagree", "Disagree", "Neutral", "Ågree", "Strongly\nagree"
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 25, 50, 75, 100)
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Flow
  LoopInitiator consentLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine Consent1
    Routine Consent2
  LoopTerminator consentLoop
  Routine Intro
  LoopInitiator demoLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 10
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    Routine demo
    Routine confirm
  LoopTerminator demoLoop
  LoopInitiator trialLoop loopType="TrialHandler"
    conditionsFile = stim_positive.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'TrialN': 1, 'clip_stim': 'stimuli/testvideo_4s.mp4', 'compre_ques': 'Q1.\tWhich animal was NOT rescued in the clip?\nA) Lamb.\nB) Cat.\nC) Pigeon.\nD) Whale.\nE) Koala.\n\nClick the button to submit your response.', 'que_answer': 3, 'attention_ques': "What's your favorite animals? You must select 'Cat'. This is an attention check.\n\nA) Dog\nB) Cow\nC) Cat\nD) Sparrow\nE) Snake\n\nClick the button to submit your response.", 'atten_answer': 3},
      {'TrialN': 2, 'clip_stim': 'stimuli/testvideo_4s.mp4', 'compre_ques': 'Q2.\tWhich statement is NOT true about the animals mentioned in the clip?\nA)  The mother pig and her piglets were rescued from a slaughterhouse.\nB)  Most pigs are raised in factory farms and live on concrete or metal floors.\nC) The rescued hens had been kept in large, spacious cages before their rescue.\nD) Calves rescued from dairy farms were given a chance to explore outside together.\nE) Beagles from a laboratory were seeing the outside world for the first time after their rescue.\n\nClick the button to submit your re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,
      {'TrialN': 3, 'clip_stim': 'stimuli/testvideo_4s.mp4', 'compre_ques': 'Q3.\tWhich of the following is NOT described in the clip?\nA) Goats enjoying a slide.\nB) A bear scratching its back on a tree.\nC) ) Cows running around in a pasture.\nD) Chickens playing around.\nE) Piglets playing in the mud.\n\nClick the button to submit your response.', 'que_answer': 4, 'attention_ques': "What's your favorite food? You must select 'pizza'. This is an attention check.\n\nA) Pizza\nB) Pasta\nC) Fried chicken\nD) Salad\nE) Soup\n\nClick the button to submit your response.", 'atten_answer': 1},
      {'TrialN': 4, 'clip_stim': 'stimuli/testvideo_4s.mp4', 'compre_ques': 'Q4.\tWhat is NOT described in the clip?\nA) Elephants playing with a tire.\nB) Pigs playing with a ball.\nC) Cows playing with a ball.\nD) Goats riding in a cart.\nE) Sheep playing with a ball.\n\nClick the button to submit your response.', 'que_answer': 1, 'attention_ques': "What's 7 plus 2? You must select '27'. This is an attention check.\n\nA) 2\nB) 14\nC) 5\nD) 9\nE) 27\n\nClick the button to submit your response.", 'atten_answer': 5}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
    Routine begintrial
    Routine clip
    Routine attention
    LoopInitiator ratingLoop loopType="TrialHandler"
      conditionsFile = rating_questions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'rating_ques': 'How strongly are you feeling joyful?'},
        {'rating_ques': 'How strongly are you feeling warm and tender?'},
        {'rating_ques': 'How strongly are you feeling inspired or uplifted?'},
        {'rating_ques': 'How strongly are you feeling sadness?'},
        {'rating_ques': 'How strongly are you feeling ashamed?'},
        {'rating_ques': 'How strongly are you feeling horrified?'},
        {'rating_ques': 'How strongly are you feeling disgusted?'},
        {'rating_ques': 'How strongly are you feeling a sense of relevance to yourself?'},
        {'rating_ques': 'How strongly are you feeling surprised?'},
        {'rating_ques': 'How strongly are you feeling angry?'},
        {'rating_ques': 'How strongly are you feeling happy?'}]
      Routine ratings
    LoopTerminator ratingLoop
    Routine quiz
  LoopTerminator trialLoop
  Routine real
  Routine End
